<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 15/04/2009 at 18:08:08 using:

COR (0.9.31.1203)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
-->
<model name="hodgkin_huxley_squid_axon_model_1952_modified" cmeta:id="hodgkin_huxley_squid_axon_model_1952_modified" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
   
   <units name="millisecond">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_millisecond">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_millivolt_millisecond">
      <unit units="millivolt" exponent="-1"/>
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="milliS_per_cm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microF_per_cm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <units name="microA_per_cm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="centi" exponent="-2"/>
   </units>
   <component name="environment">
      <variable name="time" units="millisecond" public_interface="out" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#time">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <component name="membrane">
      <variable name="V" units="millivolt" initial_value="-75" public_interface="out" cmeta:id="membrane_voltage">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_voltage">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_R" units="millivolt" initial_value="-75" public_interface="out"/>
      <variable name="Cm" units="microF_per_cm2" initial_value="1" cmeta:id="membrane_capacitance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_capacitance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="i_Na" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_K" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_L" units="microA_per_cm2" public_interface="in"/>
      <variable name="i_Stim" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_stimulus_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="i_tot" units="microA_per_cm2" public_interface="out"
      cmeta:id="membrane_total_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_total_current">
               <bqbiol:is rdf:resource="urn:aidan#membrane_total_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Stim</ci>
            <piecewise>
               <piece>
                  <cn cellml:units="microA_per_cm2">-20</cn>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <cn cellml:units="millisecond">10</cn>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <cn cellml:units="millisecond">10.5</cn>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="microA_per_cm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
         <apply>
            <eq/>
            <ci>i_tot</ci>
            <apply>
               <plus/>
               <ci>i_Stim</ci>
               <ci>i_Na</ci>
               <ci>i_K</ci>
               <ci>i_L</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>i_tot</ci>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel">
      <variable name="i_Na" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_fast_sodium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="g_Na" units="milliS_per_cm2" initial_value="120" cmeta:id="membrane_fast_sodium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="G_Na" units="milliS_per_cm2" cmeta:id="membrane_effective_fast_sodium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_effective_fast_sodium_current_conductance">
               <bqbiol:is rdf:resource="urn:aidan#membrane_effective_fast_sodium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_Na" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <variable name="m" units="dimensionless" private_interface="in"/>
      <variable name="h" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_Na</ci>
            <apply>
               <plus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">115</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>G_Na</ci>
            <apply>
               <times/>
               <ci>g_Na</ci>
               <apply>
                  <power/>
                  <ci>m</ci>
                  <cn cellml:units="dimensionless">3</cn>
               </apply>
               <ci>h</ci>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <ci>G_Na</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel_m_gate">
      <variable name="m" units="dimensionless" initial_value="0.05" public_interface="out" cmeta:id="membrane_fast_sodium_current_m_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_m_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="alpha_m" units="per_millisecond" cmeta:id="membrane_fast_sodium_current_m_gate_alpha">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_m_gate_alpha">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_alpha"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="beta_m" units="per_millisecond"
      cmeta:id="membrane_fast_sodium_current_m_gate_beta">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_m_gate_beta">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_beta"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="amk1" units="per_millivolt_millisecond" initial_value="0.1" cmeta:id="alpha_m_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_m_k1">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_alpha_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="amk2" units="millivolt" initial_value="25" cmeta:id="alpha_m_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_m_k2">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_alpha_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="amk3" units="millivolt" initial_value="10" cmeta:id="alpha_m_k3">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_m_k3">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_alpha_k3"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bmk1" units="per_millisecond" initial_value="4" cmeta:id="beta_m_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_m_k1">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_beta_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bmk2" units="millivolt" initial_value="18" cmeta:id="beta_m_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_m_k2">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_m_gate_beta_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>amk1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">75</cn>
                     <apply>
                        <minus/>
                        <ci>amk2</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">75</cn>
                              <apply>
                                 <minus/>
                                 <ci>amk2</ci>
                              </apply>
                           </apply>
                        </apply>
                        <ci>amk3</ci>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <times/>
               <ci>bmk1</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">75</cn>
                        </apply>
                     </apply>
                     <ci>bmk2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_channel_h_gate">
      <variable name="h" units="dimensionless" initial_value="0.6" public_interface="out"
      cmeta:id="membrane_fast_sodium_current_h_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_h_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="alpha_h" units="per_millisecond"
      cmeta:id="membrane_fast_sodium_current_h_gate_alpha">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_h_gate_alpha">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_alpha"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="beta_h" units="per_millisecond"
      cmeta:id="membrane_fast_sodium_current_h_gate_beta">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_h_gate_beta">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_beta"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="ahk1" units="per_millisecond" initial_value="0.07" cmeta:id="alpha_h_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_h_k1">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_alpha_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="ahk2" units="millivolt" initial_value="20" cmeta:id="alpha_h_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_h_k2">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_alpha_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bhk1" units="millivolt" initial_value="30" cmeta:id="beta_h_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_h_k1">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_beta_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bhk2" units="millivolt" initial_value="10" cmeta:id="beta_h_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_h_k2">
               <bqbiol:is rdf:resource="urn:aidan#membrane_fast_sodium_current_h_gate_beta_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <ci>ahk1</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">75</cn>
                        </apply>
                     </apply>
                     <ci>ahk2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_millisecond">1</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">75</cn>
                              <apply>
                                 <minus/>
                                 <ci>bhk1</ci>
                              </apply>
                           </apply>
                        </apply>
                        <ci>bhk2</ci>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_h</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>h</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_h</ci>
                  <ci>h</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel">
      <variable name="i_K" units="microA_per_cm2" public_interface="out" cmeta:id="membrane_potassium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_potassium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="g_K" units="milliS_per_cm2" initial_value="36" cmeta:id="membrane_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_potassium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="G_K" units="milliS_per_cm2" cmeta:id="membrane_effective_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_effective_potassium_current_conductance">
               <bqbiol:is rdf:resource="urn:aidan#membrane_effective_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_K" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in" private_interface="out"/>
      <variable name="V" units="millivolt" public_interface="in" private_interface="out"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <variable name="n" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_K</ci>
            <apply>
               <minus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">12</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>G_K</ci>
            <apply>
               <times/>
               <ci>g_K</ci>
               <apply>
                  <power/>
                  <ci>n</ci>
                  <cn cellml:units="dimensionless">4</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_K</ci>
            <apply>
               <times/>
               <ci>G_K</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_K</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="potassium_channel_n_gate">
      <variable name="n" units="dimensionless" initial_value="0.325" public_interface="out" cmeta:id="potassium_channel_n_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#potassium_channel_n_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_channel_n_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="alpha_n" units="per_millisecond" cmeta:id="potassium_channel_n_gate_alpha">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#potassium_channel_n_gate_alpha">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_alpha"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="beta_n" units="per_millisecond" cmeta:id="potassium_channel_n_gate_beta">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#potassium_channel_n_gate_beta">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_beta"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="ank1" units="per_millivolt_millisecond" initial_value="0.01" cmeta:id="alpha_n_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_n_k1">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_alpha_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
       <variable name="ank2" units="millivolt" initial_value="10" cmeta:id="alpha_n_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_n_k2">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_alpha_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
       <variable name="ank3" units="millivolt" initial_value="10" cmeta:id="alpha_n_k3">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#alpha_n_k3">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_alpha_k3"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bnk1" units="per_millisecond" initial_value="0.125" cmeta:id="beta_n_k1">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_n_k1">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_beta_k1"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="bnk2" units="millivolt" initial_value="80" cmeta:id="beta_n_k2">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#beta_n_k2">
               <bqbiol:is rdf:resource="urn:aidan#potassium_channel_n_gate_beta_k2"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_n</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <ci>ank1</ci>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="millivolt">75</cn>
                     <apply>
                        <minus/>
                        <ci>ank2</ci>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="millivolt">75</cn>
                              <apply>
                                 <minus/>
                                 <ci>ank2</ci>
                              </apply>
                           </apply>
                        </apply>
                        <ci>ank3</ci>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_n</ci>
            <apply>
               <times/>
               <ci>bnk1</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="millivolt">75</cn>
                        </apply>
                     </apply>
                     <ci>bnk2</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>n</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_n</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>n</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_n</ci>
                  <ci>n</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="leakage_current">
      <variable name="i_L" units="microA_per_cm2" public_interface="out" cmeta:id="leakage"/>
      <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#leakage">
               <bqbiol:is rdf:resource="urn:aidan#leakage_current"/>
            </rdf:Description>
      </rdf:RDF>
      <variable name="g_L" units="milliS_per_cm2" initial_value="0.3" cmeta:id="leakage_max">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#leakage_max">
               <bqbiol:is rdf:resource="urn:aidan#leakage_current_max"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="E_L" units="millivolt"/>
      <variable name="time" units="millisecond" public_interface="in"/>
      <variable name="V" units="millivolt" public_interface="in"/>
      <variable name="E_R" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_L</ci>
            <apply>
               <plus/>
               <ci>E_R</ci>
               <cn cellml:units="millivolt">10.613</cn>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_L</ci>
            <apply>
               <times/>
               <ci>g_L</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_L</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_channel">
            <component_ref component="sodium_channel_m_gate"/>
            <component_ref component="sodium_channel_h_gate"/>
         </component_ref>
         <component_ref component="potassium_channel">
            <component_ref component="potassium_channel_n_gate"/>
         </component_ref>
         <component_ref component="leakage_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_channel">
         <component_ref component="sodium_channel_m_gate"/>
         <component_ref component="sodium_channel_h_gate"/>
      </component_ref>
      <component_ref component="potassium_channel">
         <component_ref component="potassium_channel_n_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="leakage_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="potassium_channel"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_K" variable_2="i_K"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="leakage_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="E_R" variable_2="E_R"/>
      <map_variables variable_1="i_L" variable_2="i_L"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="sodium_channel" component_2="sodium_channel_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="potassium_channel" component_2="potassium_channel_n_gate"/>
      <map_variables variable_1="n" variable_2="n"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
</model>
